// This model is slightly modified to fit our validation research purposes about hippocampal one cell FS BC models
// The original model is from: Chiovin et al. 2014

load_file("subiter.hoc")

objref synlist
objref all
objref soma_group
objref dendrite_group

proc celldef() {
    topol()
    subsets()
    geom()
    biophys()
    geom_nseg()
    biophys_inhomo()
}

create Soma
create Sec_Comp_2
create Sec_Comp_9
create Sec_Comp_54
create Sec_Comp_146
create Sec_Comp_197
create Sec_Comp_287
create Sec_Comp_310
create Sec_Comp_325
create Sec_Comp_335
create Sec_Comp_391
create Sec_Comp_399
create Sec_Comp_401
create Sec_Comp_437
create Sec_Comp_486
create Sec_Comp_544
create Sec_Comp_604
create Sec_Comp_612
create Sec_Comp_649
create Sec_Comp_722
create Sec_Comp_771
create Sec_Comp_803
create Sec_Comp_811
create Sec_Comp_904
create Sec_Comp_1096
create Sec_Comp_1115
create Sec_Comp_1133
create Sec_Comp_1140
create Sec_Comp_1144
create Sec_Comp_1218
create Sec_Comp_1324
create Sec_Comp_1343
create Sec_Comp_1376
create Sec_Comp_1474
create Sec_Comp_1484
create Sec_Comp_1507
create Sec_Comp_1532
create Sec_Comp_1566
create Sec_Comp_1640
create Sec_Comp_1757
create Sec_Comp_1850
create Sec_Comp_1980
create Sec_Comp_2044
create Sec_Comp_2062
create Sec_Comp_2076

proc topol() {
    connect Sec_Comp_2(0), Soma(0.5)
    connect Sec_Comp_9(0), Sec_Comp_2(1.0)
    connect Sec_Comp_54(0), Sec_Comp_9(1.0)
    connect Sec_Comp_146(0), Sec_Comp_9(1.0)
    connect Sec_Comp_197(0), Sec_Comp_2(1.0)
    connect Sec_Comp_287(0), Sec_Comp_197(1.0)
    connect Sec_Comp_310(0), Sec_Comp_287(1.0)
    connect Sec_Comp_325(0), Sec_Comp_287(1.0)
    connect Sec_Comp_335(0), Sec_Comp_197(1.0)
    connect Sec_Comp_391(0), Soma(0.5)
    connect Sec_Comp_399(0), Sec_Comp_391(1.0)
    connect Sec_Comp_401(0), Sec_Comp_399(1.0)
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    basic_shape()
}

proc basic_shape() {
basic_shape_extra_0()
basic_shape_extra_1()
basic_shape_extra_2()
basic_shape_extra_3()
basic_shape_extra_4()
basic_shape_extra_5()
basic_shape_extra_6()
basic_shape_extra_7()
basic_shape_extra_8()
basic_shape_extra_9()
basic_shape_extra_10()
basic_shape_extra_11()
basic_shape_extra_12()
basic_shape_extra_13()
basic_shape_extra_14()
basic_shape_extra_15()
basic_shape_extra_16()
basic_shape_extra_17()
basic_shape_extra_18()
basic_shape_extra_19()
basic_shape_extra_20()
basic_shape_extra_21()
basic_shape_extra_22()
}

proc basic_shape_extra_0(){
    Soma {pt3dclear() pt3dadd(0.0, -6.0, 0.0, 12.0) pt3dadd(0.0, 6.0, 0.0, 12.0)}
    Sec_Comp_2 {pt3dclear() pt3dadd(0.0, 0.0, 0.0, 1.5) pt3dadd(-1.6, -0.8, -4.5, 1.5)}
    Sec_Comp_2 {pt3dadd(-3.4, -1.2, -8.6, 1.5)}
    Sec_Comp_2 {pt3dadd(-5.1, -1.5, -12.5, 1.5)}
    Sec_Comp_2 {pt3dadd(-7.4, -2.4, -17.1, 1.5)}
    Sec_Comp_2 {pt3dadd(-9.2, -2.0, -19.9, 1.5)}
    Sec_Comp_2 {pt3dadd(-10.9, -2.2, -22.1, 1.5)}
    Sec_Comp_2 {pt3dadd(-13.2, -2.7, -24.0, 1.5)}
    Sec_Comp_9 {pt3dclear() pt3dadd(-13.2, -2.7, -24.0, 1.5) pt3dadd(-15.0, -2.2, -25.0, 1.5)}
    Sec_Comp_9 {pt3dadd(-16.0, -0.8, -25.8, 1.5)}
    Sec_Comp_9 {pt3dadd(-16.7, 1.0, -26.8, 1.5)}
    Sec_Comp_9 {pt3dadd(-17.8, 2.4, -27.6, 1.5)}
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}

proc basic_shape_extra_1(){
    Sec_Comp_54 {pt3dadd(-153.7, 77.8, -45.0, 1.3)}
    Sec_Comp_54 {pt3dadd(-155.5, 78.3, -45.0, 1.3)}
    Sec_Comp_54 {pt3dadd(-157.2, 79.0, -45.0, 1.3)}
    Sec_Comp_54 {pt3dadd(-158.5, 80.5, -45.0, 1.3)}
    Sec_Comp_54 {pt3dadd(-160.0, 81.3, -45.1, 1.3)}
    Sec_Comp_54 {pt3dadd(-161.8, 81.9, -45.1, 1.3)}
    Sec_Comp_54 {pt3dadd(-163.2, 83.1, -45.1, 1.3)}
    Sec_Comp_54 {pt3dadd(-164.8, 84.0, -45.1, 1.3)}
    Sec_Comp_54 {pt3dadd(-166.3, 84.9, -45.1, 1.3)}
    Sec_Comp_54 {pt3dadd(-167.7, 85.9, -45.1, 1.3)}
    Sec_Comp_54 {pt3dadd(-168.6, 87.5, -45.1, 1.3)}
    Sec_Comp_54 {pt3dadd(-170.0, 88.6, -45.1, 0.5)}
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}

proc basic_shape_extra_2(){
    Sec_Comp_197 {pt3dadd(-19.9, -10.2, -29.3, 1.3)}
    Sec_Comp_197 {pt3dadd(-21.3, -11.3, -30.2, 1.3)}
    Sec_Comp_197 {pt3dadd(-22.6, -12.7, -31.1, 1.3)}
    Sec_Comp_197 {pt3dadd(-23.4, -14.3, -31.9, 1.3)}
    Sec_Comp_197 {pt3dadd(-23.8, -16.0, -32.8, 1.3)}
    Sec_Comp_197 {pt3dadd(-24.9, -17.6, -33.7, 1.3)}
    Sec_Comp_197 {pt3dadd(-25.9, -19.0, -34.5, 1.3)}
    Sec_Comp_197 {pt3dadd(-27.5, -19.9, -35.3, 1.3)}
    Sec_Comp_197 {pt3dadd(-29.1, -20.7, -36.2, 1.3)}
    Sec_Comp_197 {pt3dadd(-30.9, -21.4, -37.0, 1.3)}
    Sec_Comp_197 {pt3dadd(-32.6, -22.1, -37.8, 1.3)}
    Sec_Comp_197 {pt3dadd(-34.4, -23.0, -38.7, 1.3)}
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}

proc basic_shape_extra_3(){
    Sec_Comp_287 {pt3dadd(-172.3, -86.7, -63.3, 1.3)}
    Sec_Comp_287 {pt3dadd(-174.1, -86.2, -63.0, 1.3)}
    Sec_Comp_287 {pt3dadd(-175.9, -85.6, -62.7, 1.3)}
    Sec_Comp_287 {pt3dadd(-177.4, -84.7, -62.4, 1.3)}
    Sec_Comp_287 {pt3dadd(-179.0, -83.7, -62.0, 1.3)}
    Sec_Comp_287 {pt3dadd(-180.8, -83.1, -61.6, 1.3)}
    Sec_Comp_287 {pt3dadd(-182.5, -82.8, -61.2, 1.3)}
    Sec_Comp_287 {pt3dadd(-184.3, -82.4, -60.7, 1.3)}
    Sec_Comp_287 {pt3dadd(-186.9, -82.1, -60.0, 1.3)}
    Sec_Comp_310 {pt3dclear() pt3dadd(-186.9, -82.1, -60.0, 0.5) pt3dadd(-188.7, -82.8, -59.4, 0.5)}
    Sec_Comp_310 {pt3dadd(-190.1, -83.8, -58.8, 0.5)}
    Sec_Comp_310 {pt3dadd(-191.7, -84.7, -58.2, 0.5)}
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}

proc basic_shape_extra_4(){
    Sec_Comp_401 {pt3dclear() pt3dadd(-17.2, -3.5, 18.0, 1.3) pt3dadd(-18.8, -4.3, 17.400002, 1.3)}
    Sec_Comp_401 {pt3dadd(-20.5, -5.0, 16.7, 1.3)}
    Sec_Comp_401 {pt3dadd(-22.3, -5.2, 16.099998, 1.3)}
    Sec_Comp_401 {pt3dadd(-24.0, -5.4, 15.299999, 1.3)}
    Sec_Comp_401 {pt3dadd(-25.8, -4.7, 14.5, 1.3)}
    Sec_Comp_401 {pt3dadd(-27.2, -3.6, 13.700001, 1.3)}
    Sec_Comp_401 {pt3dadd(-28.9, -2.9, 12.799999, 1.3)}
    Sec_Comp_401 {pt3dadd(-30.5, -2.0, 11.9, 1.3)}
    Sec_Comp_401 {pt3dadd(-32.3, -2.0, 11.1, 1.3)}
    Sec_Comp_401 {pt3dadd(-34.0, -1.9, 10.1, 1.3)}
    Sec_Comp_401 {pt3dadd(-35.8, -1.5, 9.200001, 1.3)}
    Sec_Comp_401 {pt3dadd(-37.5, -1.3, 8.200001, 1.3)}
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}

proc basic_shape_extra_5(){
    Sec_Comp_486 {pt3dadd(-106.2, 17.8, -17.1, 1.3)}
    Sec_Comp_486 {pt3dadd(-107.8, 18.7, -17.3, 1.3)}
    Sec_Comp_486 {pt3dadd(-109.6, 19.4, -17.4, 1.3)}
    Sec_Comp_486 {pt3dadd(-111.3, 20.1, -17.6, 1.3)}
    Sec_Comp_486 {pt3dadd(-112.7, 21.1, -17.7, 1.3)}
    Sec_Comp_486 {pt3dadd(-114.3, 22.2, -17.8, 1.3)}
    Sec_Comp_486 {pt3dadd(-116.1, 22.9, -17.9, 1.3)}
    Sec_Comp_486 {pt3dadd(-117.8, 23.6, -18.0, 1.3)}
    Sec_Comp_486 {pt3dadd(-119.4, 24.5, -18.1, 1.3)}
    Sec_Comp_486 {pt3dadd(-121.2, 24.8, -18.1, 1.3)}
    Sec_Comp_486 {pt3dadd(-122.9, 25.2, -18.2, 1.3)}
    Sec_Comp_486 {pt3dadd(-124.7, 25.3, -18.2, 1.3)}
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}

proc basic_shape_extra_6(){
    Sec_Comp_544 {pt3dadd(-107.5, 46.6, 102.0, 1.3)}
    Sec_Comp_544 {pt3dadd(-109.2, 47.1, 104.1, 1.3)}
    Sec_Comp_544 {pt3dadd(-111.8, 48.7, 108.0, 1.3)}
    Sec_Comp_604 {pt3dclear() pt3dadd(-111.8, 48.7, 108.0, 0.5) pt3dadd(-113.6, 48.4, 109.4, 0.5)}
    Sec_Comp_604 {pt3dadd(-115.4, 49.2, 110.399994, 0.5)}
    Sec_Comp_604 {pt3dadd(-117.1, 49.8, 110.899994, 0.5)}
    Sec_Comp_604 {pt3dadd(-118.9, 49.6, 111.0, 0.5)}
    Sec_Comp_604 {pt3dadd(-119.7, 51.2, 110.899994, 0.5)}
    Sec_Comp_604 {pt3dadd(-120.6, 52.7, 110.5, 0.5)}
    Sec_Comp_604 {pt3dadd(-122.4, 52.7, 109.8, 0.5)}
    Sec_Comp_604 {pt3dadd(-125.7, 52.0, 108.0, 0.5)}
    Sec_Comp_612 {pt3dclear() pt3dadd(-111.8, 48.7, 108.0, 0.5) pt3dadd(-112.9, 50.1, 109.7, 0.5)}
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}

proc basic_shape_extra_7(){
    Sec_Comp_649 {pt3dadd(-104.6, -38.1, 24.599998, 1.3)}
    Sec_Comp_649 {pt3dadd(-106.4, -38.2, 24.400002, 1.3)}
    Sec_Comp_649 {pt3dadd(-108.2, -38.4, 24.2, 1.3)}
    Sec_Comp_649 {pt3dadd(-109.9, -38.8, 24.0, 1.3)}
    Sec_Comp_649 {pt3dadd(-111.7, -39.1, 23.8, 1.3)}
    Sec_Comp_649 {pt3dadd(-113.4, -39.5, 23.5, 1.3)}
    Sec_Comp_649 {pt3dadd(-115.2, -39.3, 23.3, 1.3)}
    Sec_Comp_649 {pt3dadd(-116.8, -40.2, 23.0, 1.3)}
    Sec_Comp_649 {pt3dadd(-118.2, -41.2, 22.7, 1.3)}
    Sec_Comp_649 {pt3dadd(-119.7, -42.3, 22.400002, 1.3)}
    Sec_Comp_649 {pt3dadd(-121.2, -43.3, 22.099998, 1.3)}
    Sec_Comp_649 {pt3dadd(-122.7, -44.2, 21.8, 1.3)}
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}

proc basic_shape_extra_8(){
    Sec_Comp_771 {pt3dadd(-187.9, -68.1, -6.0, 0.5)}
    Sec_Comp_803 {pt3dclear() pt3dadd(0.0, 0.0, 0.0, 1.5) pt3dadd(1.5, -1.0, -4.6000004, 1.5)}
    Sec_Comp_803 {pt3dadd(2.0, -2.8, -8.8, 1.5)}
    Sec_Comp_803 {pt3dadd(3.3, -4.7, -14.0, 1.5)}
    Sec_Comp_803 {pt3dadd(4.1, -6.4, -17.9, 1.5)}
    Sec_Comp_803 {pt3dadd(5.4, -7.7, -21.5, 1.5)}
    Sec_Comp_803 {pt3dadd(5.6, -9.5, -24.5, 1.5)}
    Sec_Comp_803 {pt3dadd(6.7, -10.8, -27.1, 1.5)}
    Sec_Comp_803 {pt3dadd(8.6, -12.5, -30.0, 1.5)}
    Sec_Comp_811 {pt3dclear() pt3dadd(8.6, -12.5, -30.0, 1.5) pt3dadd(10.0, -13.5, -32.9, 1.5)}
    Sec_Comp_811 {pt3dadd(10.8, -15.2, -36.1, 1.5)}
    Sec_Comp_811 {pt3dadd(10.9, -17.0, -39.0, 1.5)}
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}

proc basic_shape_extra_9(){
    Sec_Comp_811 {pt3dadd(80.0, -136.4, -160.9, 1.0)}
    Sec_Comp_811 {pt3dadd(82.0, -138.3, -162.0, 1.0)}
    Sec_Comp_904 {pt3dclear() pt3dadd(8.6, -12.5, -30.0, 1.5) pt3dadd(10.3, -11.9, -31.2, 1.5)}
    Sec_Comp_904 {pt3dadd(12.1, -11.5, -32.3, 1.5)}
    Sec_Comp_904 {pt3dadd(13.8, -11.4, -33.4, 1.5)}
    Sec_Comp_904 {pt3dadd(15.6, -11.8, -34.5, 1.5)}
    Sec_Comp_904 {pt3dadd(17.4, -12.1, -35.6, 1.5)}
    Sec_Comp_904 {pt3dadd(20.3, -12.1, -37.3, 2.0)}
    Sec_Comp_904 {pt3dadd(22.1, -11.9, -38.4, 2.0)}
    Sec_Comp_904 {pt3dadd(23.8, -11.4, -39.4, 2.0)}
    Sec_Comp_904 {pt3dadd(25.6, -11.0, -40.4, 2.0)}
    Sec_Comp_904 {pt3dadd(27.3, -10.6, -41.4, 2.0)}
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}

proc basic_shape_extra_10(){
    Sec_Comp_904 {pt3dadd(186.1, -14.2, -91.2, 2.0)}
    Sec_Comp_904 {pt3dadd(187.9, -14.8, -91.6, 2.0)}
    Sec_Comp_904 {pt3dadd(189.8, -15.0, -91.9, 2.0)}
    Sec_Comp_904 {pt3dadd(191.7, -14.8, -92.2, 2.0)}
    Sec_Comp_904 {pt3dadd(193.5, -14.5, -92.5, 2.0)}
    Sec_Comp_904 {pt3dadd(195.2, -14.3, -92.8, 2.0)}
    Sec_Comp_904 {pt3dadd(197.0, -14.7, -93.2, 2.0)}
    Sec_Comp_904 {pt3dadd(198.8, -15.3, -93.5, 2.0)}
    Sec_Comp_904 {pt3dadd(200.6, -15.9, -93.8, 2.0)}
    Sec_Comp_904 {pt3dadd(202.3, -15.9, -94.1, 2.0)}
    Sec_Comp_904 {pt3dadd(204.1, -15.2, -94.4, 2.0)}
    Sec_Comp_904 {pt3dadd(205.8, -14.8, -94.7, 2.0)}
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}

proc basic_shape_extra_11(){
    Sec_Comp_1096 {pt3dadd(347.3, -54.7, -117.7, 0.5)}
    Sec_Comp_1096 {pt3dadd(347.7, -56.5, -118.3, 0.5)}
    Sec_Comp_1096 {pt3dadd(347.4, -58.3, -118.9, 0.5)}
    Sec_Comp_1096 {pt3dadd(348.4, -59.8, -119.5, 0.5)}
    Sec_Comp_1096 {pt3dadd(348.5, -61.5, -120.1, 0.5)}
    Sec_Comp_1096 {pt3dadd(349.3, -63.3, -120.8, 0.5)}
    Sec_Comp_1096 {pt3dadd(349.0, -65.0, -121.4, 0.5)}
    Sec_Comp_1096 {pt3dadd(348.6, -66.8, -122.1, 0.5)}
    Sec_Comp_1096 {pt3dadd(349.5, -68.4, -122.8, 0.5)}
    Sec_Comp_1096 {pt3dadd(350.1, -70.1, -123.6, 0.5)}
    Sec_Comp_1096 {pt3dadd(350.0, -71.9, -124.3, 0.5)}
    Sec_Comp_1096 {pt3dadd(350.3, -73.6, -125.0, 0.5)}
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}

proc basic_shape_extra_12(){
    Sec_Comp_1144 {pt3dadd(119.0, 47.3, -43.5, 2.5)}
    Sec_Comp_1144 {pt3dadd(120.7, 47.2, -44.4, 2.5)}
    Sec_Comp_1144 {pt3dadd(122.5, 47.6, -45.2, 2.5)}
    Sec_Comp_1144 {pt3dadd(123.8, 48.7, -46.0, 2.5)}
    Sec_Comp_1144 {pt3dadd(125.6, 49.3, -46.8, 2.5)}
    Sec_Comp_1144 {pt3dadd(127.3, 49.7, -47.5, 2.5)}
    Sec_Comp_1144 {pt3dadd(129.0, 50.5, -48.3, 2.5)}
    Sec_Comp_1144 {pt3dadd(130.8, 51.2, -49.1, 2.5)}
    Sec_Comp_1144 {pt3dadd(132.5, 51.5, -49.8, 2.5)}
    Sec_Comp_1144 {pt3dadd(134.3, 51.7, -50.5, 2.5)}
    Sec_Comp_1144 {pt3dadd(136.0, 52.1, -51.1, 2.5)}
    Sec_Comp_1144 {pt3dadd(137.8, 52.5, -51.8, 2.5)}
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}

proc basic_shape_extra_13(){
    Sec_Comp_1218 {pt3dadd(280.1, 125.1, -104.3, 2.0)}
    Sec_Comp_1218 {pt3dadd(281.8, 125.5, -104.8, 2.0)}
    Sec_Comp_1218 {pt3dadd(283.5, 126.3, -105.2, 2.0)}
    Sec_Comp_1218 {pt3dadd(284.9, 127.5, -105.7, 2.0)}
    Sec_Comp_1218 {pt3dadd(286.3, 128.8, -106.2, 2.0)}
    Sec_Comp_1218 {pt3dadd(287.1, 130.4, -106.6, 2.0)}
    Sec_Comp_1218 {pt3dadd(288.1, 131.9, -107.1, 2.0)}
    Sec_Comp_1218 {pt3dadd(288.9, 133.5, -107.5, 2.0)}
    Sec_Comp_1218 {pt3dadd(289.7, 135.1, -107.9, 2.0)}
    Sec_Comp_1218 {pt3dadd(291.1, 136.2, -108.4, 2.0)}
    Sec_Comp_1218 {pt3dadd(292.5, 137.5, -108.8, 2.0)}
    Sec_Comp_1218 {pt3dadd(293.5, 138.9, -109.3, 2.0)}
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}

proc basic_shape_extra_14(){
    Sec_Comp_1376 {pt3dadd(192.2, 54.9, -65.7, 2.0)}
    Sec_Comp_1376 {pt3dadd(193.9, 55.2, -66.1, 2.0)}
    Sec_Comp_1376 {pt3dadd(195.7, 55.4, -66.5, 2.0)}
    Sec_Comp_1376 {pt3dadd(197.4, 55.6, -66.9, 2.0)}
    Sec_Comp_1376 {pt3dadd(199.1, 56.0, -67.3, 2.0)}
    Sec_Comp_1376 {pt3dadd(200.9, 56.1, -67.7, 2.0)}
    Sec_Comp_1376 {pt3dadd(202.7, 56.0, -68.1, 2.0)}
    Sec_Comp_1376 {pt3dadd(204.4, 56.0, -68.5, 2.0)}
    Sec_Comp_1376 {pt3dadd(206.2, 55.6, -68.9, 2.0)}
    Sec_Comp_1376 {pt3dadd(208.0, 55.1, -69.3, 2.0)}
    Sec_Comp_1376 {pt3dadd(209.7, 55.0, -69.7, 2.0)}
    Sec_Comp_1376 {pt3dadd(211.5, 54.9, -70.1, 2.0)}
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}

proc basic_shape_extra_15(){
    Sec_Comp_1484 {pt3dadd(349.9, 42.4, -99.3, 0.5)}
    Sec_Comp_1484 {pt3dadd(349.6, 40.7, -99.8, 0.5)}
    Sec_Comp_1484 {pt3dadd(350.5, 38.9, -100.4, 0.5)}
    Sec_Comp_1484 {pt3dadd(351.5, 37.4, -100.9, 0.5)}
    Sec_Comp_1484 {pt3dadd(352.1, 34.2, -102.0, 0.5)}
    Sec_Comp_1507 {pt3dclear() pt3dadd(334.3, 71.1, -96.0, 1.0) pt3dadd(335.7, 72.2, -95.7, 1.0)}
    Sec_Comp_1507 {pt3dadd(337.0, 73.3, -95.4, 1.0)}
    Sec_Comp_1507 {pt3dadd(338.8, 73.8, -95.1, 1.0)}
    Sec_Comp_1507 {pt3dadd(340.5, 73.9, -94.8, 1.0)}
    Sec_Comp_1507 {pt3dadd(342.1, 73.1, -94.5, 1.0)}
    Sec_Comp_1507 {pt3dadd(343.9, 73.0, -94.2, 1.0)}
    Sec_Comp_1507 {pt3dadd(346.3, 73.9, -93.8, 0.5)}
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}

proc basic_shape_extra_16(){
    Sec_Comp_1566 {pt3dadd(82.9, 12.2, -18.8, 2.5)}
    Sec_Comp_1566 {pt3dadd(84.6, 12.4, -19.6, 2.5)}
    Sec_Comp_1566 {pt3dadd(86.4, 12.6, -20.4, 2.5)}
    Sec_Comp_1566 {pt3dadd(88.1, 12.7, -21.3, 2.5)}
    Sec_Comp_1566 {pt3dadd(89.9, 12.8, -22.1, 2.5)}
    Sec_Comp_1566 {pt3dadd(91.6, 12.5, -23.0, 2.5)}
    Sec_Comp_1566 {pt3dadd(93.4, 12.5, -23.8, 2.5)}
    Sec_Comp_1566 {pt3dadd(95.2, 12.4, -24.7, 2.5)}
    Sec_Comp_1566 {pt3dadd(98.0, 12.2, -26.1, 2.0)}
    Sec_Comp_1566 {pt3dadd(99.7, 11.9, -27.0, 2.0)}
    Sec_Comp_1566 {pt3dadd(101.7, 12.5, -28.1, 2.0)}
    Sec_Comp_1566 {pt3dadd(103.4, 13.1, -29.0, 2.0)}
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}

proc basic_shape_extra_17(){
    Sec_Comp_1640 {pt3dadd(259.4, 34.0, -96.6, 2.0)}
    Sec_Comp_1640 {pt3dadd(261.2, 33.6, -97.1, 2.0)}
    Sec_Comp_1640 {pt3dadd(262.9, 34.0, -97.7, 2.0)}
    Sec_Comp_1640 {pt3dadd(264.6, 34.8, -98.2, 2.0)}
    Sec_Comp_1640 {pt3dadd(266.2, 35.7, -98.7, 2.0)}
    Sec_Comp_1640 {pt3dadd(267.9, 36.1, -99.2, 2.0)}
    Sec_Comp_1640 {pt3dadd(269.7, 36.9, -99.7, 2.0)}
    Sec_Comp_1640 {pt3dadd(271.4, 37.5, -100.2, 2.0)}
    Sec_Comp_1640 {pt3dadd(273.1, 38.2, -100.7, 2.0)}
    Sec_Comp_1640 {pt3dadd(274.9, 38.6, -101.2, 2.0)}
    Sec_Comp_1640 {pt3dadd(276.6, 39.1, -101.6, 2.0)}
    Sec_Comp_1640 {pt3dadd(278.4, 39.1, -102.1, 2.0)}
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}

proc basic_shape_extra_18(){
    Sec_Comp_1757 {pt3dadd(229.8, 29.0, -127.3, 2.0)}
    Sec_Comp_1757 {pt3dadd(231.5, 29.7, -129.3, 2.0)}
    Sec_Comp_1757 {pt3dadd(233.2, 30.5, -131.4, 2.0)}
    Sec_Comp_1757 {pt3dadd(235.0, 31.1, -133.4, 2.0)}
    Sec_Comp_1757 {pt3dadd(236.7, 31.3, -135.3, 2.0)}
    Sec_Comp_1757 {pt3dadd(239.2, 31.2, -138.0, 2.0)}
    Sec_Comp_1757 {pt3dadd(242.6, 30.6, -141.8, 1.0)}
    Sec_Comp_1757 {pt3dadd(244.3, 30.9, -143.8, 1.0)}
    Sec_Comp_1757 {pt3dadd(246.1, 30.8, -145.8, 1.0)}
    Sec_Comp_1757 {pt3dadd(247.6, 31.7, -147.9, 1.0)}
    Sec_Comp_1757 {pt3dadd(249.0, 33.2, -150.2, 1.0)}
    Sec_Comp_1757 {pt3dadd(250.5, 34.1, -152.4, 1.0)}
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}

proc basic_shape_extra_19(){
    Sec_Comp_1850 {pt3dadd(89.0, -45.7, -25.8, 2.0)}
    Sec_Comp_1850 {pt3dadd(90.5, -47.0, -26.5, 2.0)}
    Sec_Comp_1850 {pt3dadd(92.3, -47.3, -27.1, 2.0)}
    Sec_Comp_1850 {pt3dadd(94.2, -47.2, -27.7, 2.0)}
    Sec_Comp_1850 {pt3dadd(96.0, -47.1, -28.3, 2.0)}
    Sec_Comp_1850 {pt3dadd(97.9, -47.5, -29.0, 2.0)}
    Sec_Comp_1850 {pt3dadd(99.2, -48.9, -29.6, 2.0)}
    Sec_Comp_1850 {pt3dadd(100.1, -50.4, -30.2, 2.0)}
    Sec_Comp_1850 {pt3dadd(101.3, -51.8, -30.8, 2.0)}
    Sec_Comp_1850 {pt3dadd(102.7, -52.8, -31.4, 2.0)}
    Sec_Comp_1850 {pt3dadd(104.5, -53.4, -32.1, 2.0)}
    Sec_Comp_1850 {pt3dadd(106.3, -53.7, -32.7, 2.0)}
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}

proc basic_shape_extra_20(){
    Sec_Comp_1980 {pt3dadd(263.4, -65.0, -65.5, 2.0)}
    Sec_Comp_1980 {pt3dadd(265.2, -65.5, -65.4, 2.0)}
    Sec_Comp_1980 {pt3dadd(267.0, -65.8, -65.2, 2.0)}
    Sec_Comp_1980 {pt3dadd(268.7, -65.7, -65.1, 2.0)}
    Sec_Comp_1980 {pt3dadd(270.5, -64.9, -65.0, 2.0)}
    Sec_Comp_1980 {pt3dadd(272.2, -64.5, -64.8, 2.0)}
    Sec_Comp_1980 {pt3dadd(273.9, -63.7, -64.7, 2.0)}
    Sec_Comp_1980 {pt3dadd(275.7, -63.4, -64.5, 2.0)}
    Sec_Comp_1980 {pt3dadd(277.4, -63.2, -64.4, 2.0)}
    Sec_Comp_1980 {pt3dadd(279.2, -63.6, -64.3, 2.0)}
    Sec_Comp_1980 {pt3dadd(281.0, -63.7, -64.1, 2.0)}
    Sec_Comp_1980 {pt3dadd(282.7, -63.5, -64.0, 2.0)}
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}

proc basic_shape_extra_21(){
    Sec_Comp_2076 {pt3dadd(266.6, -91.5, -73.3, 2.0)}
    Sec_Comp_2076 {pt3dadd(268.0, -92.8, -73.5, 2.0)}
    Sec_Comp_2076 {pt3dadd(269.5, -93.8, -73.7, 2.0)}
    Sec_Comp_2076 {pt3dadd(271.2, -93.7, -73.9, 2.0)}
    Sec_Comp_2076 {pt3dadd(273.0, -93.3, -74.0, 2.0)}
    Sec_Comp_2076 {pt3dadd(274.8, -93.9, -74.2, 2.0)}
    Sec_Comp_2076 {pt3dadd(276.2, -94.9, -74.4, 2.0)}
    Sec_Comp_2076 {pt3dadd(277.7, -95.9, -74.6, 2.0)}
    Sec_Comp_2076 {pt3dadd(279.4, -96.5, -74.8, 2.0)}
    Sec_Comp_2076 {pt3dadd(281.1, -97.5, -75.0, 2.0)}
    Sec_Comp_2076 {pt3dadd(282.0, -99.0, -75.2, 2.0)}
    Sec_Comp_2076 {pt3dadd(283.3, -100.4, -75.4, 2.0)}
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}

proc basic_shape_extra_22(){
}

proc subsets() { local i
all = new SectionList()
subsets_extra_0()
subsets_extra_1()
}

proc subsets_extra_0(){


    soma_group = new SectionList()
    Soma soma_group.append()

    dendrite_group = new SectionList()
    Sec_Comp_2 dendrite_group.append()
    Sec_Comp_9 dendrite_group.append()
    Sec_Comp_54 dendrite_group.append()
    Sec_Comp_146 dendrite_group.append()
    Sec_Comp_197 dendrite_group.append()
    Sec_Comp_287 dendrite_group.append()
    Sec_Comp_310 dendrite_group.append()
    Sec_Comp_325 dendrite_group.append()
    Sec_Comp_335 dendrite_group.append()
    Sec_Comp_391 dendrite_group.append()
    Sec_Comp_399 dendrite_group.append()
    Sec_Comp_401 dendrite_group.append()
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
    Soma all.append()
}

proc subsets_extra_1(){
    Sec_Comp_2 all.append()
    Sec_Comp_9 all.append()
    Sec_Comp_54 all.append()
    Sec_Comp_146 all.append()
    Sec_Comp_197 all.append()
    Sec_Comp_287 all.append()
    Sec_Comp_310 all.append()
    Sec_Comp_325 all.append()
    Sec_Comp_335 all.append()
    Sec_Comp_391 all.append()
    Sec_Comp_399 all.append()
    Sec_Comp_401 all.append()
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}

proc geom() {
}

proc biophys() {
    celsius = 36

    forsec all cm = 0.93
    forsec all Ra = 172.0

    forsec all {         insert LeakConductance  { gmax_LeakConductance = 1.0E-4 } e_LeakConductance = -65 
    }

//    forsec soma_group {         insert KDR_FS2  { gmax_KDR_FS2 = 0.2 }          ek = -90.0  // note: this is val from ChannelML, may be reset later
//    }

//    forsec soma_group {         insert Na_FS16  { gmax_Na_FS16 = 0.2 }          ena = 55.0  // note: this is val from ChannelML, may be reset later
//    }

    forsec soma_group {         insert hh2  { gnabar_hh2 = 0.2 }  {gkbar_hh2 = 0.2}  {vtraub_hh2 = -50}  {ek = -90}    ena = 55.0  // note: this is val from ChannelML, may be reset later
    }

//    forsec dendrite_group {         insert KDR_FS2  { gmax_KDR_FS2 = 0.05 }          ek = -90.0  // note: this is val from ChannelML, may be reset later
//    }

    forsec dendrite_group {         insert hh2  { gnabar_hh2 = 0.01 }  {gkbar_hh2 = 0.025}  {vtraub_hh2 = -50}  {ek = -90}    ena = 55.0  // note: this is val from ChannelML, may be reset later
    }

    forsec dendrite_group { 
        insert CaT4 { gmax_CaT4 = 0.005 }  shift_CaT4 = -30
    }

//    forsec dendrite_group {
//        insert K_C_1D { gmax_K_C_1D = 0.003 }
//    }

//    forsec dendrite_group {
//        insert cacum
//    }

//    forsec dendrite_group { 
//        insert K_A_dist { gmax_K_A_dist = 0 }
//    }
}

proc geom_nseg() {
  forsec all { nseg = int((L/(0.1*lambda_f(100))+.9)/2)*2 + 1  }
}


objref ZeroToOneOverCell 
objref PathLengthOverCell 
objref PathLengthOverDendrites 
objref ParamGroup_dendrite_group 
proc biophys_inhomo() { 
    ZeroToOneOverCell = new SubsetDomainIterator(all, 0, 1, 1) 
    PathLengthOverCell = new SubsetDomainIterator(all, 0, 0, 0) 
    PathLengthOverDendrites = new SubsetDomainIterator(dendrite_group, 0, 1, 0) 
    ParamGroup_dendrite_group = new SubsetDomainIterator(dendrite_group, 0, 1, 1) 
     
    gmax_Na_dendrite_group()
    gmax_CaT_dendrite_group()
//    gmax_K_A_dist_dendrite_group()
}

func H() { // Heaviside function, can be used to set gmax = 0 when x <100 etc.
    if ($1>=0) return 1
    return 0
}

proc gmax_Na_dendrite_group() { local x, p, p0, p1
    PathLengthOverDendrites.update()
    for PathLengthOverDendrites.loop() {
        x = PathLengthOverDendrites.x
        p = PathLengthOverDendrites.p
        gnabar_hh2(x) = 100000.0 * ((1.5E-7 / (1 + exp((p - 250) / (-10)))) + 0.0E-7) // 100000.0 to convert from nc to NEURON units
    }
}

proc gmax_CaT_dendrite_group() { local x, p, p0, p1
    PathLengthOverDendrites.update()
    for PathLengthOverDendrites.loop() {
        x = PathLengthOverDendrites.x 
        p = PathLengthOverDendrites.p
        gcabar_CaT4(x) = 100000.0 * ((5.0E-8 / (1 + exp((p - 250) / (-10)))) + 0.0E-7) // 100000.0 to convert from nc to NEURON units
    }
}

// proc gmax_K_A_dist_dendrite_group() { local x, p, p0, p1
//     PathLengthOverDendrites.update()
//     for PathLengthOverDendrites.loop() {
//         x = PathLengthOverDendrites.x 
//         p = PathLengthOverDendrites.p
//         gmax_K_A_dist(x) = 100000.0 * (p / 1.0E10) // 100000.0 to convert from nc to NEURON units
//     }
// }

access Soma

celldef()

//objref ampasyn, ns, nc

//Sec_Comp_904 ampasyn = new Exp2Syn(0.6)
//ampasyn.tau1 = 0.3
//ampasyn.tau2 = 3

//ns = new NetStim(.5)
//ns.start = 100
//ns.interval = 1000

//nc = new NetCon(ns, ampasyn)
//nc.weight = 0.0
//nc.delay = 0.0



// to have basal_list and apical_list to the hippounit dendrite test

objref basal_list, apical_list

basal_list = new SectionList()
apical_list = new SectionList()

Sec_Comp_2 basal_list.append()
Sec_Comp_9 basal_list.append()
Sec_Comp_54 basal_list.append()
Sec_Comp_146 basal_list.append()
Sec_Comp_197 basal_list.append()
Sec_Comp_287 basal_list.append()
Sec_Comp_310 basal_list.append()
Sec_Comp_325 basal_list.append()
Sec_Comp_335 basal_list.append()
Sec_Comp_391 basal_list.append()
Sec_Comp_399 basal_list.append()
Sec_Comp_401 basal_list.append()
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


