// This model is slightly modified to fit our validation research purposes about hippocampal one cell FS BC models
// The original model is from: Ferrante & Ascoli 2015
// ModelDB Accession:206378

{create axon[29]}
{create soma[1]}
{create dendrite[69]}
{create apical_dendrite[46]}
{create user5[53]}

{access soma[0]}
{pt3dclear()}
{pt3dadd(-0.929,2.286,0.01,6.05)}
{pt3dadd(-0.929,2.286,0,6.05)}

{soma[0] connect axon[0](0), 1}
{access axon[0]}
{pt3dclear()}
{pt3dadd(-0.568,-1,-0.023,17.738)}
{pt3dadd(3.5,7,7,0.3)}
{pt3dadd(5.5,14,7,0.3)}
{pt3dadd(6.5,22.5,6,0.3)}
{pt3dadd(6,29.5,7,0.3)}
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

access soma

USER5MAX = 52
APIDENDMAX = 45
BASDENDMAX  = 68

TWO_THIRD_APIDIST = 616 //uM

//Quadratic_fitting_results_Type_I_model: 
//A0 = 0.004335629	
//B0 = 65.61550978


//Quadratic_fitting_results_Type_C_model: 
//A1 = 0.00279626
//B1 = 70.2208

MODELTYPE = 0
use_mcell_ran4(1)
lowindex = 1001
mcell_ran4_init(lowindex)
highindex = 1

NMDAFLAG = 0

if (NMDAFLAG == 0) { //only AMPA-R
    wtAmpa = 1
    wtNmda = 0
} else { //NMDAFLAG = 1, with both AMPA-R, NMDA-R
    wtAmpa = 0.8
    wtNmda = 0.2
}

// soma area(0.5) 


TOTALDEND = APIDENDMAX + BASDENDMAX + 3 
// "3": counting start at 0

objref dend[TOTALDEND]



/****************************************************************************
Grouping dendritic sections together in an array dend, later for being used to
randomly put synapses on the proximal apical, distal apical and basal dendrite
*****************************************************************************/
index = 0

forsec "dendrite" { //this will includes both dendrites and apical-dendrites
    dend[index] = new SectionRef()
    index += 1
}

//quadratic function fitting result A and B are set in cell's hoc file
A = 0.0036
B = 156

//synapses rise and decay time constants from andrasfalvy mody

TAU1e=0.5 
TAU2e=5.5 

TAU1i=0.73
TAU2i=6.5 

dist=1
rel=0.1

Rm = 28000    //unit: Ohm-cm^2
RmDend = Rm/1
RmSoma = Rm
RmAx = Rm

Cm    = 1
CmSoma= Cm
CmAx  = Cm
CmDend = Cm*1

RaAll= 50  //unit: Ohm-cm
RaSoma=50  
RaAx = 50

Vrest = -65
gna =  .02  
AXONM = 2
gkdr = 0.01
celsius = 35.0  
KMULT =  0.025  
KMULTP = 0.025  
gcan=0.0//005
gcal=0.0//005
gcat=0.0//005
ghd=0.00005
nash=0



forsec "axon" {insert pas e_pas=Vrest g_pas = 1/RmAx Ra=RaAx cm=CmAx}

forsec "soma" {
                insert pas e_pas=Vrest g_pas = 1/RmSoma Ra=RaSoma cm=CmSoma
                insert ds 
}

forsec "dendrite" {insert pas e_pas=Vrest g_pas = 1/RmDend Ra=RaAll cm=CmDend}

forsec "user5" {insert pas e_pas=Vrest g_pas = 1/RmDend Ra=RaAll  cm=CmDend}


access soma
freq=50
//load_file("fixnseg.hoc")
//geom_nseg()

tot=0
forall {tot=tot+nseg}
distance()
maxdist=0
forsec "user5" for(x) {if (distance(x)>maxdist) {maxdist=distance(x)}}


forsec "axon" {   
                insert nax gbar_nax=gna * AXONM	sh_nax=nash
                insert kdr gkdrbar_kdr=gkdr
               
                insert kap gkabar_kap = KMULTP*0.2
}

forsec "soma" {   
		insert hd ghdbar_hd=ghd	vhalfl_hd=-73
                insert na3 ar_na3=1 sh_na3=nash gbar_na3=gna
                insert kdr gkdrbar_kdr=gkdr
                insert kap gkabar_kap = KMULTP
               
}

/*---------------------setting up apical oblique dendrite channel kinetics--------*/
for (i=0; i<= APIDENDMAX; i += 1) {
        access apical_dendrite[i] {
	insert ds
                if (diam>0.35) {factor=1} else {factor=1}
                insert hd ghdbar_hd=ghd
                insert na3 ar_na3=1 gbar_na3=gna*factor sh_na3=nash
                insert kdr gkdrbar_kdr=gkdr*factor
                insert kap gkabar_kap=0
                insert kad gkabar_kad=0

                for (x) if (x>0 && x<1) { xdist = distance(x)
                        ghdbar_hd(x) = factor*ghd*(1+3*xdist/100)
                                if (xdist > 100){
                                        vhalfl_hd=-81
                                        gkabar_kad(x) = factor*KMULT*(1+xdist/100)
                                        } else {
                                        vhalfl_hd=-73
                                        gkabar_kap(x) = factor*KMULTP*(1+xdist/100)
                                        }
                }
        }
}


/*---------------------setting up basal dendrite channel kinetics--------*/
for (i=0; i <= BASDENDMAX; i += 1) { 
	access dendrite[i] { 
		if (diam>0.35) {factor=1} else {factor=1}
		insert hd ghdbar_hd=ghd
                insert na3 ar_na3=1 gbar_na3=gna*factor sh_na3=nash
                insert kdr gkdrbar_kdr=gkdr*factor
		insert kap gkabar_kap=0
		insert kad gkabar_kad=0

		for (x) if (x>0 && x<1) { xdist = distance(x)
                	ghdbar_hd(x) = factor*ghd*(1+3*xdist/100)
                		if (xdist > 100){
					vhalfl_hd=-81
                        		gkabar_kad(x) = factor*KMULT*(1+xdist/100)
                			} else {
					vhalfl_hd=-73
                        		gkabar_kap(x) = factor*KMULTP*(1+xdist/100)
               				}
		}
	}
}

/*----------------------------setting up main trunk channel kinetics-------------*/
forsec "user5" {   // the main trunk
	insert ds

		insert hd ghdbar_hd=ghd
                insert na3 ar_na3=1 gbar_na3=gna sh_na3=nash
                insert kdr gkdrbar_kdr=gkdr
		insert kap gkabar_kap=0
		insert kad gkabar_kad=0

		for (x) if (x>0 && x<1) { xdist = distance(x)
                	ghdbar_hd(x) = ghd*(1+3*xdist/100)
                		if (xdist > 100){
					vhalfl_hd=-81
                        		gkabar_kad(x) = KMULT*(1+xdist/100)
                			} else {
					vhalfl_hd=-73
                        		gkabar_kap(x) = KMULTP*(1+xdist/100)
               				}
		}

}


access soma

// commented out to be able to run the hippounit - does not change the model 
//objref pw
//pw = new PWManager()
//pw.landscape(1)


proc init() {
	t=0
        forall {
        v=Vrest
        if (ismembrane("nax") || ismembrane("na3")) {ena=55}	
        if (ismembrane("kdr") || ismembrane("kap") || ismembrane("kad")) {ek=-90}
        if (ismembrane("hd") ) {ehd_hd=-30}
	}
	finitialize(Vrest)
        fcurrent()

        forall {
	for (x) {
	if (ismembrane("na3")||ismembrane("nax")){e_pas(x)=v(x)+(ina(x)+ik(x))/g_pas(x)}
	if (ismembrane("hd")) {e_pas(x)=e_pas(x)+i_hd(x)/g_pas(x)}
		}
	}
	//cvode.re_init()
	//cvode.event(tstop)
	access soma
}


proc advance() {
	fadvance()
}
//------------end modeltypeI


// to have basal_list, apical_list and axon_list to the hippounit dendrite test

objref basal_list, apical_list, axon_list

basal_list = new SectionList()
apical_list = new SectionList()
axon_list = new SectionList()

access apical_dendrite
apical_list.append()
for i=1,45 {
apical_dendrite[i] apical_list.append()
}

access user5
apical_list.append()
for i=1,52 {
user5[i] apical_list.append()
}

access dendrite
basal_list.append()
for i=1,68 {
dendrite[i] basal_list.append()
}

access axon
axon_list.append()
for i=1,28 {
axon[i] axon_list.append()
}


//outfile = new File()



